PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 600]
  expName = Colour Priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent introduction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        "Greetings!
        In the upcoming task, you will see different objects in varying colors. Your goal is to identify the accurate depiction of the object as quickly and accurately as possible.

        Press 'y' if you can identify the image, and press 'n' if you cannot.

        If, at any point in the experiment you feel the need or want to exit the experiment, please press the Escape button. Press space bar when you're ready to proceed."
    KeyboardComponent key_response
      allowedKeys = 'space','y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_stim
      image [set every repeat] = $stim_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent Response
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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  Routine End
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = "Thank you for your participation!"
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions for the control group.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_image': 'Images/coloured/black tire.png', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/blue sea.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/blue sky.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/brown coffee.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/green tree.png', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/orange carrot.png', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/orange orange.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/pink pig.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/red apple.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/red firetruck.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/yellow lemon.png', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/yellow tuba.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/yellow cheese.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/coloured/white snowflake.jpg', 'condition': 'coloured'},
      {'stim_image': 'Images/miscoloured/blue apple.jpg', 'condition': 'miscoloured'},
      {'stim_image': 'Images/miscoloured/blue carrot.png', 'condition': 'miscoloured'},
      {'stim_image': 'Images/miscoloured/blue cheese.jpg', 'condition': 'miscoloured'},
      {'stim_image': 'Images/miscoloured/blue firetruck.jpg', 'condition': 'miscoloured'},
      {'stim_image': 'Images/miscoloured/blue tire.png', 'condition': 'miscoloured'}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
    Routine Trial
  LoopTerminator trials
  Routine End
