PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 600]
  expName = Grayscale Priming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent introduction_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        "Greetings!
        In the upcoming task, you will see different objects in varying shades of gray. You will see three grayscale images of the same object. Choose the image that best represents what the object should look like if it were colored correctly. Use your knowledge of the object to guide your choice.
        Press 'y' if you think that the image is the correct version, and press 'n' if you do not think so. If, at any point in the experiment you feel the need or want to exit the experiment, please press the Escape button. Press space bar when you're ready to proceed."
    KeyboardComponent key_response
      allowedKeys = 'space','y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_stim
      image [set every repeat] = $stim_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent Response
      allowedKeys = 'y','n'
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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  Routine End
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = "Thank you for your participation!"
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Control group conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stim_image': 'Image/coloured/black tire.png', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/blue sea.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/blue sky.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/brown coffee.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/green tree.png', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/orange carrot.png', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/orange orange.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/pink pig.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/red apple.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/red firetruck.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/yellow lemon.png', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/yellow tuba.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/yellow cheese.jpg', 'condition': 'coloured', 'properties': 'grayscale'},
      {'stim_image': 'Image/coloured/white snowflake.jpg', 'condition': 'coloured', 'properties': 'grayscale'}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
    Routine Trial
  LoopTerminator trials
  Routine End
