PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1000, 600]
  expName = Priming Experiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click To Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Sugandha/Downloads/words (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police'},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Sugandha/Downloads/Test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old'},
      {'test': '_ha_t', 'reference': 'chart', 'old_new': 'old'},
      {'test': 't_shi_t', 'reference': 'tshirt', 'old_new': 'old'},
      {'test': '_ou_e', 'reference': 'mouse', 'old_new': 'old'},
      {'test': 'p_st_y', 'reference': 'pastry', 'old_new': 'old'},
      {'test': 'c_s_', 'reference': 'case', 'old_new': 'old'},
      {'test': '_ru_se', 'reference': 'cruise', 'old_new': 'old'},
      {'test': 'p_li_e', 'reference': 'police', 'old_new': 'old'},
      {'test': 'k_y_', 'reference': 'keys', 'old_new': 'old'},
      {'test': 'p_st_r', 'reference': 'poster', 'old_new': 'old'},
      {'test': '_o_rd', 'reference': 'board', 'old_new': 'old'},
      {'test': '_ar_le', 'reference': 'marble', 'old_new': 'old'},
      {'test': '_h_n_', 'reference': 'phone', 'old_new': 'old'},
      {'test': '_oo_', 'reference': 'book', 'old_new': 'old'},
      {'test': 'c_s_io_', 'reference': 'cushion', 'old_new': 'old'},
      {'test': 'ta_l_', 'reference': 'table', 'old_new': 'new'},
      {'test': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test': 'bo_t_le', 'reference': 'bottle', 'old_new': 'new'},
      {'test': 'c_m_ra', 'reference': 'camera', 'old_new': 'new'},
      {'test': 't_g_r', 'reference': 'tiger', 'old_new': 'new'},
      {'test': 's_ve_t_en', 'reference': 'seventeen', 'old_new': 'new'},
      {'test': 'r_gh_', 'reference': 'right', 'old_new': 'new'},
      {'test': 'h_re', 'reference': 'here', 'old_new': 'new'},
      {'test': '_ir_', 'reference': 'fire', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
